PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['task.csv']
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = testing
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine instruc
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    TextComponent text_instruc
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Instruções

        Você verá uma sequência de letras na tela e terá de responder se é uma palavra ou não. Se você achar que é, aperte a tecla p do teclado, se achar que não é, aperte q.

        Se estiver pronto para começar o treinamento, aperte barra de espaço.
    KeyboardComponent key_resp_instruc
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial
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    TextComponent fix_trial
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.4
      text = +
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    TextComponent white_trial
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.2
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    TextComponent word_trial
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.7
      text [set every repeat] = $trial_word
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    KeyboardComponent key_resp_trial
      allowedKeys = 'q','p' 
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.7
      store = nothing
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    CodeComponent code_trial_train
      Code Type = Auto->JS
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      Begin Routine:
        this_trial_correct = False
        correct_answer_trial = str(trial_correct)
      End Routine:
        resp_trial = key_resp_trial.keys

        # Caso sem resposta
        if resp_trial is None:
            this_trial_correct = False
        else:
            this_trial_correct = (str(resp_trial).lower() == str(correct_answer_trial).lower())

        # Salva dados
        thisExp.addData('participant_resp_trial', str(resp_trial))
        thisExp.addData('this_trial_correct', this_trial_correct)
  Routine start
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    TextComponent prompt_start
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        O restante do experimento será como esse teste que acabou de fazer. Pronto para começar?

        Se sim, aperte barra de espaço.
    KeyboardComponent start_space
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine stimuli
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    TextComponent fix
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.4
      text = +
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    TextComponent white
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.2
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    TextComponent word_present
      letterHeight = 0.05
      startVal [time (s)] = 0.7
      text [set every repeat] = $word
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    KeyboardComponent key_resp
      allowedKeys = 'q', 'p'
      correctAns = $correct
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.7
      storeCorrect = True
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    CodeComponent code_trial
      Code Type = Auto->JS
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      Begin Routine:
        this_exp_correct = False
        correct_answer = str(correct)
      End Routine:
        resp = key_resp.keys

        # Caso sem resposta
        if resp is None:
            this_exp_correct = False
        else:
            this_exp_correct = (str(resp).lower() == str(correct_answer).lower())

        # Salva dados
        thisExp.addData('participant_resp', str(resp))
        thisExp.addData('this_exp_correct', this_exp_correct)
        thisExp.addData('cond', cond)
  Routine feedback
    RoutineSettingsComponent feedback
      saveStartStop = False
      stopVal [duration (s)] = 0.5
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    TextComponent feedback_text
      letterHeight = 0.05
      opacity = 0
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    SoundComponent error_sound
      forceEndRoutine = False
      sound [set every repeat] = error.mp3
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    CodeComponent code_fb
      Code Type = Auto->JS
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      Begin Routine:
        # Deixar tudo invisível por padrão
        feedback_text.opacity = 0
        error_sound.stop()

        # Se errou: mostra a palavra e toca som
        if not this_exp_correct:
            feedback_text.text = "Incorreto"
            feedback_text.opacity = 1
            error_sound.play()
  Routine pause
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    TextComponent text_pause
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Essa foi a primeira parte do experimento.

        Faça uma pausa e, quando estiver pronto para começar a segunda parte, aperte barra de espaço.
    KeyboardComponent key_resp_pause
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine ty
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    TextComponent the_end
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Muito obrigada pela sua participação!

        Aperte barra de espaço para enviar seus dados.
    KeyboardComponent key_resp_end
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine feedback_trial
    RoutineSettingsComponent feedback_trial
      stopVal [duration (s)] = 0.5
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    TextComponent fb_trial
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    SoundComponent error_sound_train
      forceEndRoutine = False
      sound [set every repeat] = error.mp3
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    CodeComponent code_fb_trial
      Code Type = Auto->JS
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      Begin Routine:
        fb_trial.opacity = 0
        error_sound_train.stop()

        if not this_trial_correct:
            fb_trial.text = "Incorreto"
            fb_trial.opacity = 1
            error_sound_train.play()
  Routine setup_experiment
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    CodeComponent setup_code
      Code Type = Both
      Begin Experiment:
        import csv, random

        # Ler CSV completo
        all_trials = []
        with open('stimuli.csv', newline='', encoding='utf-8') as f:
            reader = csv.DictReader(f)
            for row in reader:
                all_trials.append(row)

        # Separar índices por condição
        pseudo = [i for i, row in enumerate(all_trials) if row['cond'] == 'pseudo']
        icon  = [i for i, row in enumerate(all_trials) if row['cond'] == 'icon']
        nicon = [i for i, row in enumerate(all_trials) if row['cond'] == 'nicon']
        onom  = [i for i, row in enumerate(all_trials) if row['cond'] == 'onom']

        # Embaralhar dentro de cada condição
        random.shuffle(pseudo)
        random.shuffle(icon)
        random.shuffle(nicon)
        random.shuffle(onom)

        # Selecionar itens por participante (240 no total)
        # >>> Modificar aqui se for o caso
        selected_pseudo = pseudo[:120]
        selected_icon  = icon[:40]
        selected_nicon = nicon[:40]
        selected_onom  = onom[:40]

        # Criar partes equilibradas (120+120)
        # >>> Modificar tb, se precisar
        part1 = (
            selected_pseudo[:60] +
            selected_icon[:20] +
            selected_nicon[:20] +
            selected_onom[:20]
        )

        part2 = (
            selected_pseudo[60:] +
            selected_icon[20:] +
            selected_nicon[20:] +
            selected_onom[20:]
        )

        # Embaralhar dentro de cada parte
        random.shuffle(part1)
        random.shuffle(part2)

        # Alternar ordem das partes entre participantes
        if random.random() < 0.5:
            first_half = part1
            second_half = part2
        else:
            first_half = part2
            second_half = part1
  Routine stimuli2
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    TextComponent fix_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.4
      text = +
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    TextComponent white_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.2
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    TextComponent word_present_2
      letterHeight = 0.05
      startVal [time (s)] = 0.7
      text [set every repeat] = $word
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    KeyboardComponent key_resp_2
      allowedKeys = 'q', 'p'
      correctAns = $correct
      forceEndRoutine = True
      startVal [time (s)] = 0.7
      storeCorrect = True
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    CodeComponent code_trial_2
      Code Type = Auto->JS
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      Begin Routine:
        this_exp_correct_2 = False
        correct_answer_2 = str(correct)
      End Routine:
        resp = key_resp_2.keys

        if resp is None:
            this_exp_correct_2 = False
        else:
            this_exp_correct_2 = (resp[0].lower() == correct_answer_2.lower())

        thisExp.addData('participant_resp', str(resp))
        thisExp.addData('this_exp_correct', this_exp_correct_2)
        thisExp.addData('cond', cond)
  Routine feeback2
    RoutineSettingsComponent feeback2
      stopVal [duration (s)] = 0.5
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    TextComponent feedback_text_2
      letterHeight = 0.05
      opacity = 0
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    SoundComponent error_sound_2
      forceEndRoutine = False
      saveStartStop = False
      sound [set every repeat] = error.mp3
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    CodeComponent code_fb_2
      Code Type = Auto->JS
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      Begin Routine:
        # Deixar invisível por padrão
        feedback_text_2.opacity = 0
        error_sound_2.stop()

        # Texto e som pra caso o participante erre
        if not this_exp_correct_2:
            feedback_text_2.text = "Incorreto"
            feedback_text_2.opacity = 1
            error_sound_2.play()
Flow
  Routine instruc
  LoopInitiator trials_train loopType="TrialHandler"
    conditionsFile = treinamento.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'trial_word': 'vida', 'trial_correct': 'p'},
      {'trial_word': 'morte', 'trial_correct': 'p'},
      {'trial_word': 'gube', 'trial_correct': 'q'},
      {'trial_word': 'pobo', 'trial_correct': 'q'}]
    Routine trial
    Routine feedback_trial
  LoopTerminator trials_train
  Routine start
  Routine setup_experiment
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = $first_half
    conditionsFile = stimuli.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('word', 'runde'), ('cond', 'pseudo'), ('correct', 'q')]),
      OrderedDict([('word', 'zinro'), ('cond', 'pseudo'), ('correct', 'q')]),
      OrderedDict([('word', 'nunse'), ('cond', 'pseudo'), ('correct', 'q')]),
      OrderedDict([('word', 'ronge'), ('cond', 'pseudo'), ('correct', 'q')]),
      OrderedDict([('word', 'manra'), ('cond', 'pseudo'), ('correct', 'q')]),
      OrderedDict([('word', 'chonte'), ('cond', 'pseudo'), ('correct', 'q')]),
      OrderedDict([('word', 'rencha'), ('cond', 'pseudo'), ('correct', 'q')]),
      OrderedDict([('word', 'zindo'), ('cond', 'pseudo'), ('correct', 'q')]),
      OrderedDict([('word', 'jasme'), ('cond', 'pseudo'), ('correct', 'q')]),
      OrderedDict([('word', 'junle'), ('cond', 'pseudo'), ('correct', 'q')]),
      OrderedDict([('word', 'nasco'), ('cond', 'pseudo'), ('correct', 'q')]),
      OrderedDict([('word', 'frunte'), ('cond', 'pseudo'), ('correct', 'q')]),
      OrderedDict([('word', 'respro'), ('cond', 'pseudo'), ('correct', 'q')]),
      OrderedDict([('word', 'frense'), ('cond', 'pseudo'), ('correct', 'q')]),
      OrderedDict([('word', 'lompe'), ('cond', 'pseudo'), ('correct', 'q')]),
      OrderedDict([('word', 'dengre'), ('cond', 'pseudo'), ('correct', 'q')]),
      OrderedDict([('word', 'marbro'), ('cond', 'pseudo'), ('correct', 'q')]),
      OrderedDict([('word', 'sasprer'), ('cond', 'pseudo'), ('correct', 'q')]),
      OrderedDict([('word', 'sengro'), ('cond', 'pseudo'), ('correct', 'q')]),
      OrderedDict([('word', 'runfa'), ('cond', 'pseudo'), ('correct', 'q')]),
      OrderedDict([('word', 'tispaca'), ('cond', 'pseudo'), ('correct', 'q')])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
    Routine stimuli
    Routine feedback
  LoopTerminator trials
  Routine pause
  LoopInitiator trials_2 loopType="TrialHandler"
    Selected rows = $second_half
    conditionsFile = stimuli.csv
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine stimuli2
    Routine feeback2
  LoopTerminator trials_2
  Routine ty
